OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

GDF file reader => #0
  Filename = C:/School/Neuroscience/Data/Virtual Reality/GDF_Spatially_Filtered_Data.gdf
  Samples per buffer = 15
  Subtract physical minimum = false
#0.EEG stream -> Temporal filter "Mu Rhythms"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 9
  High cut frequency (Hz) = 11
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.5
-> Spectral analysis => #3
  Spectral components = Amplitude
#3.Amplitude -> Mu Rhythms
  Minimum frequency to display = 0.000000
  Maximum frequency to display = 50.000000
#3.Amplitude -> Spectrum Average
  Considers zeros = false
#0.EEG stream -> Temporal filter "Beta 1 Pwr"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 13
  High cut frequency (Hz) = 15.5
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.5
-> Spectral analysis => #8
  Spectral components = Amplitude
#8.Amplitude -> Beta 1 Pwr
  Minimum frequency to display = 0.000000
  Maximum frequency to display = 50.000000
#8.Amplitude -> Spectrum Average
  Considers zeros = false
#0.EEG stream -> Temporal filter "Beta 2 Pwr"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 17
  High cut frequency (Hz) = 19.5
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.5
-> Spectral analysis => #13
  Spectral components = Amplitude
#13.Amplitude -> Beta 2 Pwr
  Minimum frequency to display = 0.000000
  Maximum frequency to display = 50.000000
#13.Amplitude -> Spectrum Average
  Considers zeros = false
#0.EEG stream -> Temporal filter "Beta 3 Pwr"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 21
  High cut frequency (Hz) = 27.5
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.5
-> Spectral analysis => #18
  Spectral components = Amplitude
#18.Amplitude -> Beta 3 Pwr
  Minimum frequency to display = 0.000000
  Maximum frequency to display = 50.000000
#18.Amplitude -> Spectrum Average
  Considers zeros = false

CSV File Writer
  Filename = C:/School/Neuroscience/Data/Virtual Reality/Mu_Data.csv
  Column separator = ,
  Precision = 10

CSV File Writer
  Filename = C:/School/Neuroscience/Data/Virtual Reality/Beta_1_Data.csv
  Column separator = ,
  Precision = 10

CSV File Writer
  Filename = C:/School/Neuroscience/Data/Virtual Reality/Beta_2_Data.csv
  Column separator = ,
  Precision = 10

CSV File Writer
  Filename = C:/School/Neuroscience/Data/Virtual Reality/Beta_3_Data.csv
  Column separator = ,
  Precision = 10
